OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renard
0x9f5c4075 = Signal Monitoring
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  CHECK - EEG, MMG and Force signals

  Routine 0


  Press button >

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> Channel Selector "FC2;CP2;C2;C4"
  Channel List = FC2;CP2;C2;C4
  Action = Select
  Channel Matching Method = Smart
-> EEG - Temporal filter => #3
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 25
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.2
-> Simple DSP "Attenuation 10X"
  Equation = x*0.1
-> Spectral Analysis => #6
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#6.Amplitude -> 0x341d3912 Instant Bars
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = true
  Gain = 0.01
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
Matrix=#6.Amplitude -> Amplitude
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = 10
  Matrix Count = 5
  Gain = 0.01
  Caption =
  Color = 0:0,0,50; 25:0,100,100; 50:0,50,0; 75:100,100,0; 100:75,0,0
#3 -> 0x341d3912 Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
Input stream 1=#3, Input stream 2=#0.Signal stream, Input stream 3=#0.Stimulations -> Identity => #10
  0xac367a9c = 6
Data=#10.Output stream 1, Stimulations=#10.Output stream 3 -> Signal display "EEG - Filtered signals"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 2
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 2
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#0.Signal stream -> Channel Selector "7"
  Channel List = 7
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "filtro força"
  Filter method = Butterworth
  Filter type = Low Pass
  Filter order = 6
  Low cut frequency (Hz) = 0
  High cut frequency (Hz) = 1
  Pass band ripple (dB) = 0.5
-> Signal average
-> Simple DSP "Offset"
  Equation = (((X-357)*0.01)*0.43)
-> Matrix Display "Force"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#0.Signal stream -> Channel Selector "5"
  Channel List = 5
  Action = Select
  Channel Matching Method = Smart
-> MMG - Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 20
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = .2
-> Simple DSP "Rectified"
  Equation = sqrt(x*x)
-> Simple DSP "Attenuation 1X"
  Equation = x*1
-> Signal average => #22
Data=#22 -> 0x341d3912 Signal display "MMG - Filtered signals"
  Display Mode = Scan
  Auto vertical scale = Global
  Scale refresh interval (secs) = 30
  Vertical Scale = 30
  Vertical Offset = 10
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#22 -> Matrix Display "MMG Display"
  Color gradient = 0:0,94,43; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
