OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Data Acquisition
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
   MMG during FES

  Routine 1

  Press button >

  Relax
  press z

  FES
  press a

  To Octave/Matlab = a = 33025; z= 33026
Comment
  Remember


  Change the folder



Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "5"
  Channel List = 5
  Action = Select
  Channel Matching Method = Smart
-> MMG - Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 20
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 0.500000
-> Simple DSP "Rectified"
  Equation = sqrt(x*x)
-> Simple DSP "Attenuation 1X" => #4
  Equation = x*1
Input stream 1=#4, Input stream 3=#0.Stimulations -> Identity => #5
  0xac367a9c = 6
Keyboard stimulator
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
-> Display cue image => #7
  Display images in full screen = false
  Scale images to fit = false
  Clear screen Stimulation = OVTK_StimulationId_Label_03
  Cue Image 1 = C:/Program Files/openvibe-2.2.0-64bit/share/openvibe/applications/vr-demo/spaceship/move.png
  Stimulation 1 = OVTK_StimulationId_Label_01
  Cue Image 2 = C:/Program Files/openvibe-2.2.0-64bit/share/openvibe/applications/vr-demo/spaceship/stop.png
  Stimulation 2 = OVTK_StimulationId_Label_02
Input Signal=#5.Output stream 1, Input Stimulations=#7 -> Generic stream writer
  Filename = C:/Rotinas-Open-Vibe/Proj_01_EEG-FES-MMG-Force/Proj_01_Sinais-AVE-EEG/Tara_MMG.ov
  Use compression = false
#7 -> Stimulation listener "Direct (deprecated)"
  Log level to use = Information
