OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  Remember


  Change the folder


Comment
  Define MMG


  Routine 2

  Define the MMG values to implementation in routine 06
  PRESS BUTTON >>


Generic stream reader => #0
  Filename = C:/Rotinas-Open-Vibe/Proj_01_EEG-FES-MMG-Force/Proj_01_Sinais-AVE-EEG/Tara_MMG.ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #1
Input signal=#1.Output stream 1, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Relax"
  Epoch duration (in sec) = 6
  Epoch offset (in sec) = 2
  Stimulation to epoch from = OVTK_StimulationId_Label_02
-> Univariate Statistics => #3
  Mean = true
  Variance = true
  Range = true
  Median = true
  IQR = true
  Percentile = true
  Percentile value = 30
#3.Mean -> Matrix Display "Relax"
  Color gradient = 0:100,39,24; 50:98,100,0; 100:13,98,28
  Steps = 100
  Symetric min/max = true
  Real time min/max = false
Input signal=#1.Output stream 1, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "FES_MMG"
  Epoch duration (in sec) = 6
  Epoch offset (in sec) = 2
  Stimulation to epoch from = OVTK_StimulationId_Label_01
-> Univariate Statistics => #6
  Mean = true
  Variance = true
  Range = true
  Median = true
  IQR = true
  Percentile = true
  Percentile value = 30
#6.Mean -> Matrix Display "FES_MMG"
  Color gradient = 0:100,39,24; 50:98,100,0; 100:13,98,28
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#1.Output stream 2 -> 0x341d3912 Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
