OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Classifier Training
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  Remember


  Change the folder


Comment
  EEG


  Routine 3

  EEG trainning


  PRESS BUTTON >

Comment
  Remember


  Change the folder



Graz Motor Imagery BCI Stimulator => #0
  Lua Script = C:/Rotinas-Open-Vibe/Proj_01_EEG-FES-MMG-Force/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 5
  First Class = OVTK_GDF_Cue_Unknown_Undefined
  Second Class = OVTK_GDF_Up
  Baseline Duration (in sec) = 10
  Wait For Beep Duration (in sec) = 0
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 4
  Feedback Duration (in sec) = 0
  End of Trial Minimum Duration (in sec) = 5
  End of Trial Maximum Duration (in sec) = 10
Stimulations=#0 -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false

Acquisition client => #2
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#2.Signal stream -> Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> Channel Selector "FC2;CP2;C2;C4" => #4
  Channel List = FC2;CP2;C2;C4
  Action = Select
  Channel Matching Method = Smart
Input stream 1=#2.Experiment information, Input stream 2=#4, Input stream 3=#2.Stimulations -> Generic stream writer
  Filename = C:/Rotinas-Open-Vibe/Proj_01_EEG-FES-MMG-Force/Proj_01_Sinais-AVE-EEG/EEG_treino.ov
  Use compression = false
#2.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
