<OpenViBE-Scenario>
	<FormatVersion>2</FormatVersion>
	<Creator>OpenViBE Designer</Creator>
	<CreatorVersion>2.2.0</CreatorVersion>
	<Settings></Settings>
	<Inputs></Inputs>
	<Outputs></Outputs>
	<Boxes>
		<Box>
			<Identifier>(0x000016d5, 0x000033f1)</Identifier>
			<Name>Temporal filter</Name>
			<AlgorithmClassIdentifier>(0xb4f9d042, 0x9d79f2e5)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Input signal</Name>
				</Input>
			</Inputs>
			<Outputs>
				<Output>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Filtered signal</Name>
				</Output>
			</Outputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x2f2c606c, 0x8512ed68)</TypeIdentifier>
					<Name>Filter method</Name>
					<DefaultValue>Butterworth</DefaultValue>
					<Value>Butterworth</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0xfa20178e, 0x4cba62e9)</TypeIdentifier>
					<Name>Filter type</Name>
					<DefaultValue>Band pass</DefaultValue>
					<Value>Band pass</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x007deef9, 0x2f3e95c6)</TypeIdentifier>
					<Name>Filter order</Name>
					<DefaultValue>4</DefaultValue>
					<Value>5</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Low cut frequency (Hz)</Name>
					<DefaultValue>29</DefaultValue>
					<Value>8</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>High cut frequency (Hz)</Name>
					<DefaultValue>40</DefaultValue>
					<Value>25</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Pass band ripple (dB)</Name>
					<DefaultValue>0.5</DefaultValue>
					<Value>1</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>176</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>432</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0x27a4ceec, 0x876d6384)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc80ce8af, 0xf699f813)</Identifier>
					<Value>1</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>6</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xcfad85b0, 0x7c6d841c)</Identifier>
					<Value>1</Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x000027da, 0x00005cde)</Identifier>
			<Name>Identity</Name>
			<AlgorithmClassIdentifier>(0x5dffe431, 0x35215c50)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Input stream 1</Name>
				</Input>
				<Input>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Input stream 2</Name>
				</Input>
			</Inputs>
			<Outputs>
				<Output>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Output stream 1</Name>
				</Output>
				<Output>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Output stream 2</Name>
				</Output>
			</Outputs>
			<Attributes>
				<Attribute>
					<Identifier>(0x17ee7c08, 0x94c14893)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>256</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>528</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x30a4e5c9, 0x83502953)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0xa8ffe2a3, 0x27038f03)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x527ad68d, 0x16d746a0)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc80ce8af, 0xf699f813)</Identifier>
					<Value>1</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xcfad85b0, 0x7c6d841c)</Identifier>
					<Value>1</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xfba64161, 0x65304e21)</Identifier>
					<Value></Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x00002d82, 0x00002d33)</Identifier>
			<Name>Relax</Name>
			<AlgorithmClassIdentifier>(0x426163d1, 0x324237b0)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Input signal</Name>
				</Input>
				<Input>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Input stimulations</Name>
				</Input>
			</Inputs>
			<Outputs>
				<Output>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Epoched signal</Name>
				</Output>
			</Outputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Epoch duration (in sec)</Name>
					<DefaultValue>1</DefaultValue>
					<Value>4</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Epoch offset (in sec)</Name>
					<DefaultValue>0.5</DefaultValue>
					<Value>0.5</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2c132d6e, 0x44ab0d97)</TypeIdentifier>
					<Name>Stimulation to epoch from</Name>
					<DefaultValue>OVTK_GDF_VEP</DefaultValue>
					<Value>OVTK_GDF_Cue_Unknown_Undefined</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>368</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>416</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0xa79941ae, 0x80708445)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc80ce8af, 0xf699f813)</Identifier>
					<Value>2</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>3</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xcfad85b0, 0x7c6d841c)</Identifier>
					<Value>2</Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x00004125, 0x0000536f)</Identifier>
			<Name>CSP Spatial Filter Trainer</Name>
			<AlgorithmClassIdentifier>(0x51db0d64, 0x2109714e)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Stimulations</Name>
				</Input>
				<Input>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Signal condition 1</Name>
				</Input>
				<Input>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Signal condition 2</Name>
				</Input>
			</Inputs>
			<Outputs>
				<Output>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Train-completed Flag</Name>
				</Output>
			</Outputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x2c132d6e, 0x44ab0d97)</TypeIdentifier>
					<Name>Train Trigger</Name>
					<DefaultValue>OVTK_GDF_End_Of_Session</DefaultValue>
					<Value>OVTK_StimulationId_Train</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x330306dd, 0x74a95f98)</TypeIdentifier>
					<Name>Spatial filter configuration</Name>
					<DefaultValue></DefaultValue>
					<Value>C:/Rotinas-Open-Vibe/Proj_01_EEG-FES-MMG-Force/csp-spatial-filter.cfg</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x007deef9, 0x2f3e95c6)</TypeIdentifier>
					<Name>Filter dimension</Name>
					<DefaultValue>2</DefaultValue>
					<Value>6</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2cdb2f0b, 0x12f231ea)</TypeIdentifier>
					<Name>Save as box config</Name>
					<DefaultValue>true</DefaultValue>
					<Value>true</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>496</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>528</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0x4b49a133, 0x42f38d94)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc80ce8af, 0xf699f813)</Identifier>
					<Value>1</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>3</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xcfad85b0, 0x7c6d841c)</Identifier>
					<Value>3</Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x00005277, 0x000014a2)</Identifier>
			<Name>Up trials</Name>
			<AlgorithmClassIdentifier>(0x426163d1, 0x324237b0)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Input signal</Name>
				</Input>
				<Input>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Input stimulations</Name>
				</Input>
			</Inputs>
			<Outputs>
				<Output>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Epoched signal</Name>
				</Output>
			</Outputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Epoch duration (in sec)</Name>
					<DefaultValue>1</DefaultValue>
					<Value>4</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x512a166f, 0x5c3ef83f)</TypeIdentifier>
					<Name>Epoch offset (in sec)</Name>
					<DefaultValue>0.5</DefaultValue>
					<Value>0.5</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0x2c132d6e, 0x44ab0d97)</TypeIdentifier>
					<Name>Stimulation to epoch from</Name>
					<DefaultValue>OVTK_GDF_VEP</DefaultValue>
					<Value>OVTK_GDF_Up</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>368</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>640</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0xa79941ae, 0x80708445)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc80ce8af, 0xf699f813)</Identifier>
					<Value>2</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>3</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xcfad85b0, 0x7c6d841c)</Identifier>
					<Value>2</Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x000055dc, 0x0000109e)</Identifier>
			<Name>Generic stream reader</Name>
			<AlgorithmClassIdentifier>(0x6468099f, 0x0370095a)</AlgorithmClassIdentifier>
			<Outputs>
				<Output>
					<TypeIdentifier>(0x403488e7, 0x565d70b6)</TypeIdentifier>
					<Name>Output stream 1</Name>
				</Output>
				<Output>
					<TypeIdentifier>(0x5ba36127, 0x195feae1)</TypeIdentifier>
					<Name>Output stream 2</Name>
				</Output>
				<Output>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Output stream 3</Name>
				</Output>
			</Outputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x330306dd, 0x74a95f98)</TypeIdentifier>
					<Name>Filename</Name>
					<DefaultValue></DefaultValue>
					<Value>C:/Rotinas-Open-Vibe/Proj_01_EEG-FES-MMG-Force/Proj_01_Sinais-AVE-EEG/EEG_treino.ov</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x17ee7c08, 0x94c14893)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>48</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>544</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x30a4e5c9, 0x83502953)</Identifier>
					<Value></Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0xf37b8e7a, 0x1bc33e4e)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xc46b3d00, 0x3e0454e1)</Identifier>
					<Value>(0x00000000, 0x005e1c11)</Value>
				</Attribute>
			</Attributes>
		</Box>
		<Box>
			<Identifier>(0x0000743e, 0x000010d2)</Identifier>
			<Name>Player Controller</Name>
			<AlgorithmClassIdentifier>(0x5f426dce, 0x08456e13)</AlgorithmClassIdentifier>
			<Inputs>
				<Input>
					<TypeIdentifier>(0x6f752dd0, 0x082a321e)</TypeIdentifier>
					<Name>Stimulations</Name>
				</Input>
			</Inputs>
			<Settings>
				<Setting>
					<TypeIdentifier>(0x2c132d6e, 0x44ab0d97)</TypeIdentifier>
					<Name>Stimulation name</Name>
					<DefaultValue>OVTK_StimulationId_Label_00</DefaultValue>
					<Value>OVTK_StimulationId_TrainCompleted</Value>
					<Modifiability>false</Modifiability>
				</Setting>
				<Setting>
					<TypeIdentifier>(0xcc14d8d6, 0xf27ecb73)</TypeIdentifier>
					<Name>Action to perform</Name>
					<DefaultValue>Pause</DefaultValue>
					<Value>Stop</Value>
					<Modifiability>false</Modifiability>
				</Setting>
			</Settings>
			<Attributes>
				<Attribute>
					<Identifier>(0x1fa7a38f, 0x54edbe0b)</Identifier>
					<Value>576</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x207c9054, 0x3c841b63)</Identifier>
					<Value>528</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x4e7b798a, 0x183beafb)</Identifier>
					<Value>(0x568d148e, 0x650792b3)</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xce18836a, 0x9c0eb403)</Identifier>
					<Value>2</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0xcfad85b0, 0x7c6d841c)</Identifier>
					<Value>1</Value>
				</Attribute>
			</Attributes>
		</Box>
	</Boxes>
	<Links>
		<Link>
			<Identifier>(0x00000ec1, 0x00004f9e)</Identifier>
			<Source>
				<BoxIdentifier>(0x00002d82, 0x00002d33)</BoxIdentifier>
				<BoxOutputIndex>0</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x00004125, 0x0000536f)</BoxIdentifier>
				<BoxInputIndex>1</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x000017e6, 0x00004537)</Identifier>
			<Source>
				<BoxIdentifier>(0x000027da, 0x00005cde)</BoxIdentifier>
				<BoxOutputIndex>0</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x00005277, 0x000014a2)</BoxIdentifier>
				<BoxInputIndex>0</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00002be8, 0x00005e24)</Identifier>
			<Source>
				<BoxIdentifier>(0x000055dc, 0x0000109e)</BoxIdentifier>
				<BoxOutputIndex>1</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x000016d5, 0x000033f1)</BoxIdentifier>
				<BoxInputIndex>0</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x000042fc, 0x00007f51)</Identifier>
			<Source>
				<BoxIdentifier>(0x000016d5, 0x000033f1)</BoxIdentifier>
				<BoxOutputIndex>0</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x000027da, 0x00005cde)</BoxIdentifier>
				<BoxInputIndex>0</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00004a99, 0x00007f97)</Identifier>
			<Source>
				<BoxIdentifier>(0x000027da, 0x00005cde)</BoxIdentifier>
				<BoxOutputIndex>1</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x00005277, 0x000014a2)</BoxIdentifier>
				<BoxInputIndex>1</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00006640, 0x000019bb)</Identifier>
			<Source>
				<BoxIdentifier>(0x000055dc, 0x0000109e)</BoxIdentifier>
				<BoxOutputIndex>2</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x000027da, 0x00005cde)</BoxIdentifier>
				<BoxInputIndex>1</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x000068fa, 0x00007623)</Identifier>
			<Source>
				<BoxIdentifier>(0x000027da, 0x00005cde)</BoxIdentifier>
				<BoxOutputIndex>0</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x00002d82, 0x00002d33)</BoxIdentifier>
				<BoxInputIndex>0</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00006f78, 0x00003d05)</Identifier>
			<Source>
				<BoxIdentifier>(0x000027da, 0x00005cde)</BoxIdentifier>
				<BoxOutputIndex>1</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x00002d82, 0x00002d33)</BoxIdentifier>
				<BoxInputIndex>1</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00007621, 0x0000772e)</Identifier>
			<Source>
				<BoxIdentifier>(0x000027da, 0x00005cde)</BoxIdentifier>
				<BoxOutputIndex>1</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x00004125, 0x0000536f)</BoxIdentifier>
				<BoxInputIndex>0</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x000077f9, 0x00001114)</Identifier>
			<Source>
				<BoxIdentifier>(0x00004125, 0x0000536f)</BoxIdentifier>
				<BoxOutputIndex>0</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x0000743e, 0x000010d2)</BoxIdentifier>
				<BoxInputIndex>0</BoxInputIndex>
			</Target>
		</Link>
		<Link>
			<Identifier>(0x00007a10, 0x000008c3)</Identifier>
			<Source>
				<BoxIdentifier>(0x00005277, 0x000014a2)</BoxIdentifier>
				<BoxOutputIndex>0</BoxOutputIndex>
			</Source>
			<Target>
				<BoxIdentifier>(0x00004125, 0x0000536f)</BoxIdentifier>
				<BoxInputIndex>2</BoxInputIndex>
			</Target>
		</Link>
	</Links>
	<Comments>
		<Comment>
			<Identifier>(0x322d63e9, 0x08221edb)</Identifier>
			<Text>&lt;big&gt;&lt;big&gt;&lt;u&gt;&lt;b&gt;&lt;big&gt; CSP EEG&lt;/big&gt;&lt;/b&gt;&lt;/u&gt;


Routine 4

&lt;span color="blue"&gt;PRESS BUTTON &lt;b&gt;&gt;&gt;&lt;/b&gt;&lt;/span&gt;

&lt;/big&gt;&lt;/big&gt;</Text>
			<Attributes>
				<Attribute>
					<Identifier>(0x473d9a43, 0x97fc0a97)</Identifier>
					<Value>96</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x7234b86b, 0x2b8651a5)</Identifier>
					<Value>176</Value>
				</Attribute>
			</Attributes>
		</Comment>
		<Comment>
			<Identifier>(0x322d63e9, 0x08221edc)</Identifier>
			<Text>&lt;small&gt;&lt;big&gt;&lt;big&gt;&lt;u&gt;&lt;b&gt;&lt;big&gt;Remember&lt;/big&gt;&lt;/b&gt;&lt;/u&gt;


Change the folder
&lt;/big&gt;&lt;/big&gt;
&lt;/small&gt;</Text>
			<Attributes>
				<Attribute>
					<Identifier>(0x473d9a43, 0x97fc0a97)</Identifier>
					<Value>688</Value>
				</Attribute>
				<Attribute>
					<Identifier>(0x7234b86b, 0x2b8651a5)</Identifier>
					<Value>96</Value>
				</Attribute>
			</Attributes>
		</Comment>
	</Comments>
	<Metadata>
		<Entry>
			<Identifier>(0x0000775c, 0x000078ff)</Identifier>
			<Type>(0x3bcce5d2, 0x43f2d968)</Type>
			<Data>[{"boxIdentifier":"(0xffffffff, 0xffffffff)","childCount":1,"height":505,"identifier":"(0x786b4ac2, 0x1b97fc59)","name":"Default window","parentIdentifier":"(0xffffffff, 0xffffffff)","type":1,"width":603},{"boxIdentifier":"(0xffffffff, 0xffffffff)","childCount":1,"identifier":"(0x6464f9a2, 0x664e4548)","index":0,"name":"Default tab","parentIdentifier":"(0x786b4ac2, 0x1b97fc59)","type":2},{"boxIdentifier":"(0xffffffff, 0xffffffff)","childCount":0,"identifier":"(0x3d476141, 0x6a464a67)","index":0,"name":"Empty","parentIdentifier":"(0x6464f9a2, 0x664e4548)","type":0}]</Data>
		</Entry>
	</Metadata>
	<Attributes>
		<Attribute>
			<Identifier>(0x790d75b8, 0x3bb90c33)</Identifier>
			<Value>Yann Renard / Fabien Lotte</Value>
		</Attribute>
		<Attribute>
			<Identifier>(0x8c1fc55b, 0x7b433dc2)</Identifier>
			<Value></Value>
		</Attribute>
		<Attribute>
			<Identifier>(0x9f5c4075, 0x4a0d3666)</Identifier>
			<Value>Online Use</Value>
		</Attribute>
		<Attribute>
			<Identifier>(0xf36a1567, 0xd13c53da)</Identifier>
			<Value></Value>
		</Attribute>
		<Attribute>
			<Identifier>(0xf6b2e3fa, 0x7bd43926)</Identifier>
			<Value>Motor Imagery</Value>
		</Attribute>
		<Attribute>
			<Identifier>(0xf8034a49, 0x8b3f37cc)</Identifier>
			<Value>INRIA</Value>
		</Attribute>
	</Attributes>
</OpenViBE-Scenario>