OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  EEG-FES-FORCE-MMG


  Routine 6

  PRESS BUTTON >
  Open visual studio .exe file

Comment
  Remember


  Change the folder


Comment
  NORMALIZATION MMG


  Values from routine 2

  EQUATION

  (x-RELAX)/(FES_MMG-RELAX)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> Channel Selector "FC2;CP2;C2;C4"
  Channel List = FC2;CP2;C2;C4
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 25
  Pass band ripple (dB) = 0.5
-> CSP Spatial Filter
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 1.442817e-001 3.411863e-003 -1.213417e-001 -3.119889e-001 1.115873e-001 1.359580e-001 -1.116613e-001 -3.135968e-001 -1.250939e-001 -1.378700e-002 -2.625042e-001 -1.009421e-001 -2.279613e-001 6.689580e-001 -3.348420e-002 9.899176e-002 -4.863345e-002 4.481541e-001 -2.025669e-001 -9.318723e-002 5.258966e-002 2.090623e-004 -1.451749e-001 -3.856019e-001 -4.710458e-002 9.675494e-002 1.549741e-001 -7.944412e-002 -7.903602e-002 7.455923e-001 -3.815222e-001 2.166322e-001 7.102007e-002 -1.493399e-001 -5.719637e-002 -1.732339e-002 4.253947e-002 -1.286825e-001 -1.415511e-001 1.086118e-001 3.485295e-002 -2.764141e-001 8.364691e-001 -3.726375e-001 4.963272e-002 9.167431e-003 -1.381837e-002 -1.012741e-002 -1.700471e-002 -1.616294e-001 6.193112e-002 -2.344197e-002 -3.390554e-001 2.998192e-001 1.635785e-002 3.717487e-001 -8.495080e-002 8.709944e-002 -4.562827e-001 4.325673e-001 -3.228420e-001 7.993942e-003 -1.115950e-001 -1.922763e-001 2.762776e-001 2.720282e-002 1.158864e-001 -4.858494e-002 -3.275103e-001 2.691000e-001 8.273217e-002 1.568368e-001 6.632540e-002 -6.147631e-002 -4.658877e-001 5.034320e-001 -1.359116e-001 5.664146e-002 -2.065083e-001 3.221159e-001 -2.724882e-001 7.822386e-002 -2.063637e-001 1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Rotinas-Open-Vibe/Proj_01_EEG-FES-MMG-Force/csp-spatial-filter.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.2
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #9
Features=#9 -> Classifier processor => #10
  Filename to load configuration from = C:/Rotinas-Open-Vibe/Proj_01_EEG-FES-MMG-Force/motor-imagery-bci-config-classifier.cfg
#10.Probability values -> Matrix Display "EEG"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#0.Signal stream -> Channel Selector "7"
  Channel List = 7
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "Force filter"
  Filter method = Butterworth
  Filter type = Low Pass
  Filter order = 6
  Low cut frequency (Hz) = 0
  High cut frequency (Hz) = 1
  Pass band ripple (dB) = 0.5
-> Signal average
-> Simple DSP "Force" => #15
  Equation = (((X-357)*0.01)*0.43)
-> 0x341d3912 Matrix Display "Force"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Input stream=#15, Stimulations stream=#0.Stimulations -> 0x341d3912 CSV File Writer "Force Writer"
  Filename = C:/Rotinas-Open-Vibe/Proj_01_EEG-FES-MMG-Force/Proj_01_Sinais-AVE-EEG/Proj_01_Px_Closed_loop-Force-[$core{date}-$core{time}].csv
  Precision = 10
  Append data = false
  Only last matrix = false
#0.Signal stream -> Channel Selector "5"
  Channel List = 5
  Action = Select
  Channel Matching Method = Smart
-> MMG - Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 20
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 1
-> Simple DSP "RMS"
  Equation = sqrt(x*x)
-> Simple DSP "Attenuation 1X"
  Equation = x*1
-> Signal average
-> Simple DSP "NORMALIZATION" => #24
  Equation = (x-0.44)/(3.56-0.44)
Input 1=#10.Probability values, Input 2=#24 -> Proj_01_VRPN Server
  Peripheral name = openvibe_vrpn_Proj_01
Input stream=#24, Stimulations stream=#0.Stimulations -> 0x341d3912 CSV File Writer "MMG Writer"
  Filename = C:/Rotinas-Open-Vibe/Proj_01_EEG-FES-MMG-Force/Proj_01_Sinais-AVE-EEG/Proj_01_Px_Closed_loop-MMG-[$core{date}-$core{time}].csv
  Precision = 10
  Append data = false
  Only last matrix = false
#24 -> Matrix Display "MMG"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Input stream=#0.Signal stream, Stimulations stream=#0.Stimulations -> 0x341d3912 CSV File Writer "EEG Writer"
  Filename = C:/Rotinas-Open-Vibe/Proj_01_EEG-FES-MMG-Force/Proj_01_Sinais-AVE-EEG/Proj_01_Px_Closed_loop-EEG-[$core{date}-$core{time}].csv
  Precision = 10
  Append data = false
  Only last matrix = false
